<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindPavlovianConditioningDataSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath>C:\Users\neurogears\source\repos\AllenNeuralDynamics\PavlovianCond_Bonsai\local\AindPavlovianConitioningTaskLogic.json</TaskLogicPath>
        <RigPath>C:\Users\neurogears\source\repos\AllenNeuralDynamics\PavlovianCond_Bonsai\local\AindPavlovianConditioningRig.json</RigPath>
        <SessionPath>C:\Users\neurogears\source\repos\AllenNeuralDynamics\PavlovianCond_Bonsai\local\AindBehaviorSessionModel.json</SessionPath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorSessionModel" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubectSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindPavlovianConditioningRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindPavlovianConitioningTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>HarpDevices</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpBehavior.PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:HarpBehaviorDevice.bonsai">
                    <PortName>COM4</PortName>
                    <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StartCondition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>StartExperiment</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>